CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Macrophages
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:Macrophages
    Name the output image:CropMacrophages
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,300
    Top and bottom rectangle positions:700,1000
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:6|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
    Select the input image:CropMacrophages
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Cell_Nucleus
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Cell_Nucleus
    Name the objects to be identified:Cell_Skeleton
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cell_Skeleton
    Select the smaller identified objects:Cell_Nucleus
    Name the tertiary objects to be identified:Cell_Cytoplasm
    Shrink smaller object prior to subtraction?:Yes
